CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*_(?P<group>.+_[A-Z]\d+_f\d+)_max_projection.tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:mo13_TGlowCyclicOpt_(?P<date>\d+)_(?P<plate>[a-zA-Z0-9_]+)_(?P<well>[A-Z]\d+)_(?P<field>f\d+)_max_projection.tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:cycle1_488_channel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:cycle1_brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:cycle1_channel_561
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:cycle1_channel_641
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "4")
    Name to assign these images:cycle1_channel_405
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "5")
    Name to assign these images:cycle2_488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "6")
    Name to assign these images:cycle2_brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "7")
    Name to assign these images:cycle2_channel_561
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "8")
    Name to assign these images:cycle2_channel_640
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "9")
    Name to assign these images:cycle2_channel_405
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:3
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:40
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
RunCellpose:[module_num:6|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
    Select the input image:cycle1_brightfield
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:60
    Detection mode:cyto2
    Name the output object:cells_raw
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:Yes
    Select the nuclei image:cycle1_channel_405
    Save probability image?:Yes
    Name the probability image:Probabilities
    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:1
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:30
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

RunCellpose:[module_num:7|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
    Select the input image:cycle1_channel_405
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:40
    Detection mode:cyto2
    Name the output object:nucl_raw
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:20
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

RelateObjects:[module_num:8|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
    Parent objects:nucl_raw
    Child objects:cells_raw
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:cells_raw
    Select the smaller identified objects:nucl_raw
    Name the tertiary objects to be identified:cyto_raw
    Shrink smaller object prior to subtraction?:Yes

FilterObjects:[module_num:10|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
    Select the objects to filter:nucl_raw
    Name the output objects:nucl
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:2
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select additional object to relabel:cells_raw
    Name the relabeled objects:cell
    Select additional object to relabel:cyto_raw
    Name the relabeled objects:cyto
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
RescaleIntensity:[module_num:11|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
    Select the input image:cycle1_brightfield
    Name the output image:cycle1_brightfield_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cycle1_brightfield_rescaled
    Name the output image:composite_segmented
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:nucl
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    Select objects to display:cyto

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:cycle1_brightfield_rescaled
    Select method for constructing file names:Single name
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    Enter single file name:cyclic_opt_v1_composite_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|segmentation_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:composite_segmented
    Select method for constructing file names:Single name
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    Enter single file name:cyclic_opt_v1_composite_segmented_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|segmentation_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:cycle1_488_channel, cycle1_channel_405, cycle1_channel_561, cycle1_channel_641, cycle2_488, cycle2_channel_405, cycle2_channel_561, cycle2_channel_640
    Select objects to measure:cell, cyto, nucl

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:cell, nucl
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:cell|Intensity_UpperQuartileIntensity_cycle1_channel_405,cell|Intensity_UpperQuartileIntensity_cycle1_channel_561,cell|Intensity_UpperQuartileIntensity_cycle1_channel_641,cell|Intensity_UpperQuartileIntensity_cycle1_488_channel,cell|Intensity_UpperQuartileIntensity_cycle2_channel_561,cell|Intensity_UpperQuartileIntensity_cycle2_channel_640,cell|Intensity_UpperQuartileIntensity_cycle2_channel_405,cell|Intensity_UpperQuartileIntensity_cycle2_488,cell|Intensity_MeanIntensityEdge_cycle1_channel_405,cell|Intensity_MeanIntensityEdge_cycle1_channel_561,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cylic_opt_v1_
    Overwrite existing files without warning?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_experiment.tsv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_images.tsv
    Use the object name for the file name?:No
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_cells.tsv
    Use the object name for the file name?:No
    Data to export:nucl
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:cyto
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_objectRelationships.tsv
    Use the object name for the file name?:No
