CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:41
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_KITTY_20230929_(?P<group>.+_[A-Z]\d+_f\d+)_max_projection.tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_KITTY_(?P<date>\d+)_(?P<plate>[a-zA-Z0-9_]+)_(?P<well>[A-Z]\d+)_(?P<field>f\d+)_max_projection.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:cd25_ki67_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:brightfield_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:dna_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:mito_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "4")
    Name to assign these images:actin_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:actin_raw
    Name the output image:actin
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:brightfield_raw
    Name the output image:brightfield
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:cd25_ki67_raw
    Name the output image:cd25_ki67
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:dna_raw
    Name the output image:dna
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:mito_raw
    Name the output image:mito
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureImageQuality:[module_num:10|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:3
    Threshold count:1
    Select the images to measure:actin, brightfield, cd25_ki67, dna, mito
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:40
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
FlagImage:[module_num:11|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:image_qc
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_MaxIntensity_dna
    Flag images based on low values?:Yes
    Minimum value:0.1
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

ImageMath:[module_num:12|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:all_channels_us
    Image or measurement?:Image
    Select the first image:dna
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:cd25_ki67
    Multiply the second image by:5
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    Image or measurement?:Image
    Select the third image:actin
    Multiply the third image by:5
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    Image or measurement?:Image
    Select the fourth image:brightfield
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:mito
    Multiply the fifth image by:1.0
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
RescaleIntensity:[module_num:13|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
    Select the input image:all_channels_us
    Name the output image:all_channels
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:14|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
    Select the input image:actin
    Name the output image:actin_viz
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.001968414 ,0.1073655
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
RescaleIntensity:[module_num:15|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
    Select the input image:dna
    Name the output image:dna_viz
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.03808652 ,0.2570382
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
RescaleIntensity:[module_num:16|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
    Select the input image:mito
    Name the output image:mito_viz
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.2046616,0.998642
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
RescaleIntensity:[module_num:17|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
    Select the input image:cd25_ki67
    Name the output image:cd25_ki67_viz
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.001861601 ,0.1399863
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:dna
    Name the primary objects to be identified:nucl_raw
    Typical diameter of objects, in pixel units (Min,Max):10,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:nucl_raw
    Name the objects to be identified:cell_raw
    Select the method to identify the secondary objects:Propagation
    Select the input image:all_channels
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:20|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
    Select the larger identified objects:cell_raw
    Select the smaller identified objects:nucl_raw
    Name the tertiary objects to be identified:cyto_raw
    Shrink smaller object prior to subtraction?:Yes

FilterObjects:[module_num:21|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notes:['Remove nuclei with centers overlapping the image border within 5%']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
    Select the objects to filter:nucl_raw
    Name the output objects:nucl
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:2
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select additional object to relabel:cell_raw
    Name the relabeled objects:cell
    Select additional object to relabel:cyto_raw
    Name the relabeled objects:cyto
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
GrayToColor:[module_num:22|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:actin_viz
    Select the image to be colored green:mito_viz
    Select the image to be colored blue:cd25_ki67_viz
    Name the output image:composite_img
    Relative weight for the red image:1.0
    Relative weight for the green image:2
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:composite_img
    Name the output image:composite_img_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:nucl
    Select outline color:#F6E700
    Select objects to display:cell

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:composite_img
    Select method for constructing file names:Single name
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    Enter single file name:tglow_2d_v2_composite_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|segmentation_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:composite_img_overlay
    Select method for constructing file names:Single name
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    Enter single file name:tglow_2d_v2_composite_segmented_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|segmentation_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureImageIntensity:[module_num:26|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
    Select images to measure:actin, brightfield, cd25_ki67, dna, mito
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:cell_raw
    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

MeasureObjectIntensity:[module_num:27|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
    Select images to measure:actin, cd25_ki67, mito
    Select objects to measure:cell, cyto, nucl

MeasureObjectIntensity:[module_num:28|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
    Select images to measure:dna
    Select objects to measure:nucl

MeasureObjectSizeShape:[module_num:29|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
    Select object sets to measure:cell, nucl
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureColocalization:[module_num:30|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
    Select images to measure:cd25_ki67, dna
    Set threshold as percentage of maximum intensity for the images:5.0
    Select where to measure correlation:Within objects
    Select objects to measure:nucl
    Run all metrics?:No
    Calculate correlation and slope metrics?:No
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureColocalization:[module_num:31|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
    Select images to measure:actin, cd25_ki67, mito
    Set threshold as percentage of maximum intensity for the images:5.0
    Select where to measure correlation:Both
    Select objects to measure:cell, cyto, nucl
    Run all metrics?:No
    Calculate correlation and slope metrics?:No
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureTexture:[module_num:32|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
    Select images to measure:dna
    Select objects to measure:nucl
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureTexture:[module_num:33|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
    Select images to measure:actin, cd25_ki67, mito
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureGranularity:[module_num:34|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
    Select images to measure:mito
    Measure within objects?:Yes
    Select objects to measure:cell, cyto
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:1
    Range of the granular spectrum:16

MeasureGranularity:[module_num:35|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
    Select images to measure:dna
    Measure within objects?:Yes
    Select objects to measure:nucl
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:1
    Range of the granular spectrum:16

MeasureObjectNeighbors:[module_num:36|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:37|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
    Select images to measure:actin, cd25_ki67, dna, mito
    Hidden:1
    Hidden:1
    Hidden:3
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:cell
    Object to use as center?:These objects
    Select objects to use as centers:nucl
    Scale the bins?:Yes
    Number of bins:5
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    Image:mito
    Objects to display:Do not use
    Number of bins:5
    Measurement:Mean Fraction
    Color map:Oranges
    Save display as image?:Yes
    Output image name:mito_heatmap
    Image:cd25_ki67
    Objects to display:Do not use
    Number of bins:5
    Measurement:Mean Fraction
    Color map:Oranges
    Save display as image?:Yes
    Output image name:cd25_ki67_heatmap
    Image:actin
    Objects to display:Do not use
    Number of bins:5
    Measurement:Mean Fraction
    Color map:Oranges
    Save display as image?:Yes
    Output image name:actin_heatmap

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:mito_heatmap
    Select method for constructing file names:Single name
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    Enter single file name:tglow_2d_v2_mito_hm_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:actin_heatmap
    Select method for constructing file names:Single name
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    Enter single file name:tglow_2d_v2_actin_hm_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:cd25_ki67_heatmap
    Select method for constructing file names:Single name
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    Enter single file name:tglow_2d_v2_cd25_ki67_hm_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:41|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Julie/20230728_TCA/results_test_farm
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:nucl|AreaShape_SpatialMoment_0_2,nucl|AreaShape_SpatialMoment_0_1,nucl|AreaShape_SpatialMoment_0_0,nucl|AreaShape_SpatialMoment_0_3,nucl|AreaShape_SpatialMoment_2_3,nucl|AreaShape_SpatialMoment_2_2,nucl|AreaShape_SpatialMoment_2_1,nucl|AreaShape_SpatialMoment_2_0,nucl|AreaShape_SpatialMoment_1_1,nucl|AreaShape_SpatialMoment_1_0,nucl|AreaShape_SpatialMoment_1_2,nucl|AreaShape_SpatialMoment_1_3,nucl|AreaShape_Zernike_7_3,nucl|AreaShape_Zernike_7_7,nucl|AreaShape_Zernike_7_5,nucl|AreaShape_Zernike_7_1,nucl|AreaShape_Zernike_8_4,nucl|AreaShape_Zernike_8_2,nucl|AreaShape_Zernike_8_8,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:tglow_2d_pipeline_v2_
    Overwrite existing files without warning?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_experiment.tsv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_images.tsv
    Use the object name for the file name?:No
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_cells.tsv
    Use the object name for the file name?:No
    Data to export:nucl
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:cyto
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_objectRelationships.tsv
    Use the object name for the file name?:No
