CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:78
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_KITTY_20230929_(?P<timepoint>[a-zA-Z0-9_]+)_(?P<well>[A-Z]\d+)_(?P<field>f\d+)_(?P<channel>ch\d+).tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_KITTY_20230929_(?P<group>.+_[A-Z]\d+_f\d+)_ch\d+.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '0.149x0.149 um per pixel. 1.2 um between z-stacks. So ~8.054 pixels per z stack per x.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'actin': 'group', 'brightfield': 'group', 'cd25_ki67': 'group', 'dna': 'group', 'mito': 'group'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:8.054
    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:cd25_ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:dna
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch4")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch5")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:dna
    Name the output image:dna_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
Threshold:[module_num:6|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notes:['Set a manual minimum for nucleus detection. This avoid images with no signal getting objects']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
    Select the input image:dna
    Name the output image:dna_bg_mask
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.005
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
ImageMath:[module_num:7|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notes:['Apply the mask for background in a baked in way. This avoids inherritance of the masks to downstream objects which happens if you use MaskImage and could give unexpected behavoir later on.']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:dna_scaled_bg_masked
    Image or measurement?:Image
    Select the first image:dna_scaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:dna_bg_mask
    Multiply the second image by:1.0
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
Resize:[module_num:8|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
    Select the input image:dna_scaled
    Name the output image:dna_scaled_2x
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:9|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
    Select the input image:dna_scaled_2x
    Name the output image:dna_filtered_2x
    Window:5

Threshold:[module_num:10|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
    Select the input image:dna_filtered_2x
    Name the output image:dna_tresh_2x
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

RemoveHoles:[module_num:11|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
    Select the input image:dna_tresh_2x
    Name the output image:dna_hrm_2x
    Size of holes to fill:25

Watershed:[module_num:12|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notes:['Max number of seeds set to keep things within a reasonable time in case the thresholding messes up. A read image should never have more then 3k cells']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
    Select the input image:dna_hrm_2x
    Name the output object:nucleus_2x_raw
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:dna_power
    Segmentation distance transform smoothing factor:1
    Minimum distance between seeds:8
    Minimum absolute internal distance:0
    Pixels from border to exclude:0
    Maximum number of seeds:3000
    Structuring element for seed dilation:ball,1

FilterObjects:[module_num:13|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notes:['Remove objects whose center is within 3% of the image boundry (the overlapping percentage between tiles. In 2x rescaled space the safe area is between 32 and 1048 pixels (64 and 2096 in full image space)']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
    Select the objects to filter:nucleus_2x_raw
    Name the output objects:nucleus_2x_raw_no_border
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:32
    Filter using a maximum measurement value?:Yes
    Maximum value:1048
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:32
    Filter using a maximum measurement value?:Yes
    Maximum value:1048
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
MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:nucleus_2x_raw_no_border
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:nucleus_2x_raw_no_border
    Name the output objects:nucleus_2x_small
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:nucleus_2x_large
    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:8
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
DilateObjects:[module_num:16|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
    Select the input object:nucleus_2x_small
    Name the output object:nucleus_2x_small_dilated
    Structuring element:disk,1

CombineObjects:[module_num:17|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
    Select initial object set:nucleus_2x_large
    Select object set to combine:nucleus_2x_small_dilated
    Select how to handle overlapping objects:Merge
    Name the combined object set:nucleus_2x

FillObjects:[module_num:18|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notes:["[deprecated] This was here to fill gaps in the nuclei, but it doesn't seem its needed anymore, and computation is relatively exprensive, so testing how it deals without."]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enabled:False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
    Select the input object:nucleus_2x
    Name the output object:nucleus_2x_filled
    Minimum hole size:64.0
    Planewise fill:Yes
    Filling method:Holes

ResizeObjects:[module_num:19|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
    Select the input object:nucleus_2x
    Name the output object:nucleus
    Method:Factor
    X Factor:2
    Y Factor:2
    Z Factor:1
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
ErodeObjects:[module_num:20|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notes:['[deprecated]']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enabled:False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
    Select the input object:nucleus
    Name the output object:nucleus_eroded
    Structuring element:Disk,2
    Prevent object removal:Yes
    Relabel resulting objects:No

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:nucleus_2x
    Name the output image:nucleus_img_2x
    Select the color format:uint16
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
ErodeImage:[module_num:22|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
    Select the input image:nucleus_img_2x
    Name the output image:nucleus_img_2x_eroded
    Structuring element:disk,2

ConvertImageToObjects:[module_num:23|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
    Select the input image:nucleus_img_2x_eroded
    Name the output object:nucleus_eroded_2x
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ResizeObjects:[module_num:24|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
    Select the input object:nucleus_eroded_2x
    Name the output object:nucleus_eroded
    Method:Factor
    X Factor:2
    Y Factor:2
    Z Factor:1
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
ImageMath:[module_num:25|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:actin_sqrt
    Image or measurement?:Image
    Select the first image:actin
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:26|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:dna_scaled
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#261EF4
    Select objects to display:nucleus

RescaleIntensity:[module_num:27|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
    Select the input image:actin_sqrt
    Name the output image:actin_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:28|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
    Select the input image:mito
    Name the output image:mito_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:29|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cd25_ki67_sqrt
    Image or measurement?:Image
    Select the first image:cd25_ki67
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:30|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
    Select the input image:cd25_ki67_sqrt
    Name the output image:cd25_ki67_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:31|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
    Select the input image:actin_scaled
    Name the output image:actin_2x
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Resize:[module_num:32|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
    Select the input image:cd25_ki67
    Name the output image:cd25_ki67_2x
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Resize:[module_num:33|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
    Select the input image:mito_scaled
    Name the output image:mito_2x
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:34|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
    Select the input image:actin_2x
    Name the output image:actin_filtered_2x
    Window:4

MedianFilter:[module_num:35|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
    Select the input image:cd25_ki67_2x
    Name the output image:cd25_ki67_filtered_2x
    Window:4

MedianFilter:[module_num:36|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
    Select the input image:mito_2x
    Name the output image:mito_filtered_2x
    Window:4

Threshold:[module_num:37|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
    Select the input image:actin_filtered_2x
    Name the output image:actin_thresh_2x
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:38|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
    Select the input image:cd25_ki67_filtered_2x
    Name the output image:cd25_ki67_tresh_2x
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:39|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
    Select the input image:mito_filtered_2x
    Name the output image:mito_thresh_2x
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:40|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cell_combined_2x
    Image or measurement?:Image
    Select the first image:dna_tresh_2x
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:actin_thresh_2x
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:cd25_ki67_tresh_2x
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:mito_thresh_2x
    Multiply the fourth image by:1.0
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
Closing:[module_num:41|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notes:['Cleans up little gaps in the mask, do this prior to removing holes to close outlies. Use a disk to not consider merging in 3d as this tends to expand the mask quite a lot.']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
    Select the input image:cell_combined_2x
    Name the output image:cell_closed_2x
    Structuring element:disk,2

RemoveHoles:[module_num:42|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
    Select the input image:cell_combined_2x
    Name the output image:cell_hrm_2x
    Size of holes to fill:64

ImageMath:[module_num:43|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:actin_filtered_inv_2x
    Image or measurement?:Image
    Select the first image:actin_2x
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:44|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
    Select the input image:actin_filtered_inv_2x
    Name the output image:actin_filtered_inv_scaled_2x
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:45|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
    Select the input image:actin_filtered_inv_scaled_2x
    Name the output image:actin_inv_masked_2x
    Use objects or an image as a mask?:Image
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    Select image for mask:cell_hrm_2x
    Invert the mask?:No

ImageMath:[module_num:46|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:actin_inv_dna_2x
    Image or measurement?:Image
    Select the first image:actin_inv_masked_2x
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:dna_tresh_2x
    Multiply the second image by:1
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
GaussianFilter:[module_num:47|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
    Select the input image:actin_inv_dna_2x
    Name the output image:actin_inv_dna_masked_filtered_2x
    Sigma:2

RescaleIntensity:[module_num:48|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
    Select the input image:actin_inv_dna_masked_filtered_2x
    Name the output image:cell_intensity_map
    Rescaling method:Stretch each image to use the full intensity range
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
Watershed:[module_num:49|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notes:['Max number of seeds set to keep things within a reasonable time in case the thresholding messes up. A read image should never have more then 3k cells']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
    Select the input image:cell_hrm_2x
    Name the output object:cells_2x_raw
    Use advanced settings?:Yes
    Generate from:Markers
    Markers:nucleus_img_2x_eroded
    Mask:cell_hrm_2x
    Connectivity:1
    Compactness:0
    Footprint:8
    Downsample:1
    Separate watershed labels:Yes
    Declump method:Intensity
    Reference Image:cell_intensity_map
    Segmentation distance transform smoothing factor:0
    Minimum distance between seeds:8
    Minimum absolute internal distance:0
    Pixels from border to exclude:0
    Maximum number of seeds:3000
    Structuring element for seed dilation:Ball,1

OverlayOutlines:[module_num:50|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cell_intensity_map
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#9B52FF
    Select objects to display:nucleus_2x
    Select outline color:#F8FA0E
    Select objects to display:cells_2x_raw

MeasureObjectSizeShape:[module_num:51|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
    Select object sets to measure:cells_2x_raw
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:52|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
    Select the objects to filter:cells_2x_raw
    Name the output objects:cells_2x_small
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:cells_2x_large
    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:10
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
DilateObjects:[module_num:53|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
    Select the input object:cells_2x_small
    Name the output object:cells_2x_small_dilated
    Structuring element:Disk,1

CombineObjects:[module_num:54|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
    Select initial object set:cells_2x_large
    Select object set to combine:cells_2x_small_dilated
    Select how to handle overlapping objects:Merge
    Name the combined object set:cells_2x_combined

FilterObjects:[module_num:55|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notes:['Remove cells near the edge']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
    Select the objects to filter:cells_2x_combined
    Name the output objects:cells_2x
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:32
    Filter using a maximum measurement value?:Yes
    Maximum value:1048
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:32
    Filter using a maximum measurement value?:Yes
    Maximum value:1048
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
FillObjects:[module_num:56|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
    Select the input object:cells_2x
    Name the output object:cells_filled_2x
    Minimum hole size:64
    Planewise fill:Yes
    Filling method:Holes

ResizeObjects:[module_num:57|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
    Select the input object:cells_filled_2x
    Name the output object:cells
    Method:Factor
    X Factor:2
    Y Factor:2
    Z Factor:1
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
ImageMath:[module_num:58|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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:all_channels_sum
    Image or measurement?:Image
    Select the first image:actin_scaled
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:cd25_ki67_scaled
    Multiply the second image by:0
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    Image or measurement?:Image
    Select the third image:dna_scaled
    Multiply the third image by:2
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    Image or measurement?:Image
    Select the fourth image:mito_scaled
    Multiply the fourth image by:0
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
OverlayOutlines:[module_num:59|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:all_channels_sum
    Name the output image:segmentation_outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#9B52FF
    Select objects to display:nucleus
    Select outline color:#F8FA0E
    Select objects to display:cells

ConvertObjectsToImage:[module_num:60|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
    Select the input objects:cells
    Name the output image:cells_img
    Select the color format:uint16
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
MaskImage:[module_num:61|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
    Select the input image:cells_img
    Name the output image:cyto_img
    Use objects or an image as a mask?:Objects
    Select object for mask:nucleus
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    Invert the mask?:Yes

ErodeImage:[module_num:62|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
    Select the input image:cyto_img
    Name the output image:cyto_img_shrunken
    Structuring element:Disk,1

ConvertImageToObjects:[module_num:63|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
    Select the input image:cyto_img_shrunken
    Name the output object:cyto
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MaskImage:[module_num:64|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
    Select the input image:cd25_ki67
    Name the output image:ki67
    Use objects or an image as a mask?:Objects
    Select object for mask:nucleus_eroded
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    Invert the mask?:No

MaskImage:[module_num:65|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
    Select the input image:cd25_ki67
    Name the output image:cd25
    Use objects or an image as a mask?:Objects
    Select object for mask:cyto
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    Invert the mask?:No

RelateObjects:[module_num:66|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
    Parent objects:cells
    Child objects:nucleus
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:67|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
    Parent objects:cells
    Child objects:cyto
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:68|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
    Select images to measure:actin, cd25, dna, mito
    Select objects to measure:cells, cyto

MeasureObjectIntensity:[module_num:69|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
    Select images to measure:dna, ki67
    Select objects to measure:nucleus

MeasureObjectSizeShape:[module_num:70|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
    Select object sets to measure:cells, cyto, nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:71|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureImageAreaOccupied:[module_num:72|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notes:['Measure the image area occupied. Doing this on the 2x threshold of the cells mask as a proxy, as this is qutie a bit quicker and should still be accurate.']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
    Measure the area occupied by:Binary Image
    Select binary images to measure:cell_hrm_2x
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
MeasureTexture:[module_num:73|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notes:['Cytoplasm (non nuclear cell) texture for Mito and Ki67']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
    Select images to measure:brightfield, cd25, mito
    Select objects to measure:cells, cyto
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureTexture:[module_num:74|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notes:['Nuclear DNA texture']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
    Select images to measure:dna, ki67
    Select objects to measure:nucleus
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureGranularity:[module_num:75|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
    Select images to measure:cd25, mito
    Measure within objects?:Yes
    Select objects to measure:cells
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:1
    Range of the granular spectrum:12

SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:segmentation_outlines
    Select method for constructing file names:Single name
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    Enter single file name:tglow_3d_pipeline_v1_\g<group>
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|segmentation_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureImageQuality:[module_num:77|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:2
    Threshold count:1
    Select the images to measure:dna
    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ExportToSpreadsheet:[module_num:78|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Applications/Documents/projects/CAT/analysis/KITTY/kitty_image_pipeline_testing/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:cells|Texture_DifferenceVariance_brightfield_3_01_256,cells|Texture_DifferenceVariance_brightfield_3_06_256,cells|Texture_DifferenceVariance_brightfield_3_04_256,cells|Texture_DifferenceVariance_brightfield_3_02_256,cells|Texture_DifferenceVariance_brightfield_3_08_256,cells|Texture_DifferenceVariance_brightfield_3_10_256,cells|Texture_DifferenceVariance_brightfield_3_07_256,cells|Texture_DifferenceVariance_brightfield_3_05_256,cells|Texture_DifferenceVariance_brightfield_3_03_256,cells|Texture_DifferenceVariance_brightfield_3_12_256,cells|Texture_DifferenceVariance_brightfield_3_00_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:tglow_3d_pipeline_v2_
    Overwrite existing files without warning?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:\g<timepoint>_\g<well>_experiment.tsv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<timepoint>_\g<well>_image.tsv
    Use the object name for the file name?:No
    Data to export:cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<timepoint>_\g<well>_cells.tsv
    Use the object name for the file name?:No
    Data to export:nucleus
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:cyto
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:\g<timepoint>_\g<well>_objectRelation.ships.tsv
    Use the object name for the file name?:No
