CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_KITTY_20230929_(?P<timepoint>[a-zA-Z0-9_]+)_(?P<well>[A-Z]\d+)_(?P<field>f\d+)_(?P<channel>ch\d+).tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_KITTY_20230929_(?P<group>.+_[A-Z]\d+_f\d+)_ch\d+.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '0.149x0.149 um per pixel. 1.2 um between z-stacks. So ~8.054 pixels per z stack per x.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'actin': 'group', 'brightfield': 'group', 'cd25_ki67': 'group', 'dna': 'group', 'mito': 'group'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:8.054
    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:cd25_ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:dna
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch4")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch5")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
HistogramMatching:[module_num:5|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
    Select the input image:actin
    Name the output image:actin_matched
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :dna
    Frame number:5
    Plane number in 3d:0

HistogramMatching:[module_num:6|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
    Select the input image:cd25_ki67
    Name the output image:cd25_ki67_matched
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :dna
    Frame number:5
    Plane number in 3d:0

HistogramMatching:[module_num:7|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
    Select the input image:mito
    Name the output image:mito_matched
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :dna
    Frame number:5
    Plane number in 3d:0

HistogramMatching:[module_num:8|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enabled:False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
    Select the input image:brightfield
    Name the output image:brightfield_matched
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :dna
    Frame number:5
    Plane number in 3d:0

ImageMath:[module_num:9|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:all_channels
    Image or measurement?:Image
    Select the first image:actin_matched
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:dna
    Multiply the second image by:1
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    Image or measurement?:Image
    Select the third image:cd25_ki67_matched
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:mito_matched
    Multiply the fourth image by:1.0
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
Resize:[module_num:10|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enabled:False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
    Select the input image:dna
    Name the output image:dna_2x
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Resize:[module_num:11|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enabled:False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
    Select the input image:all_channels
    Name the output image:all_channels_2x
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.5
    Y Resizing factor:0.5
    Z Resizing factor:1
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

RescaleIntensity:[module_num:12|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
    Select the input image:dna
    Name the output image:dna_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:13|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
    Select the input image:all_channels
    Name the output image:all_channels_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
Threshold:[module_num:14|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
    Select the input image:dna_scaled
    Name the output image:dna_mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RunCellpose:[module_num:15|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
    Select the input image:dna_scaled
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:60
    Detection mode:cyto2
    Name the output object:nucl_raw
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:Yes
    Name the probability image:dna_probs
    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.1
    Use 3D:No
    Minimum size:10
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:No

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:nucl_raw
    Name the output image:nucl_raw_img
    Select the color format:Grayscale
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
ImageMath:[module_num:17|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:nucl_raw_img_f
    Image or measurement?:Image
    Select the first image:nucl_raw_img
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:dna_mask
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:18|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
    Select the input image:nucl_raw_img_f
    Name the output object:nucl_raw_f
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:19|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:dna_scaled
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#E6ED00
    Select objects to display:nucl_raw_f

RunCellpose:[module_num:20|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
    Select the input image:actin
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:90
    Detection mode:cyto2
    Name the output object:cell_raw
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
    Select the nuclei image:dna_scaled
    Save probability image?:Yes
    Name the probability image:cell_probs
    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:1.5
    Cell probability threshold:0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.1
    Use 3D:No
    Minimum size:10
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:No

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:all_channels_scaled
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#E6ED00
    Select objects to display:cell_raw
    Select outline color:#007CFC
    Select objects to display:nucl_raw_f
