CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:37
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<field>\d+)_(?P<mask_type>.*_mask)_d\d+_ch\d+_cp_masks.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<field>\d+)_(?P<plate>.*)_(?P<well>\w\d\d)_ch(?P<channel>\d+)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "mask")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'cell_img': 'field', 'nucl_img': 'field', 'actin': 'field', 'dna': 'field', 'mito': 'field'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does channel "0")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "3")
    Name to assign these images:dna
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "2")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mask_type "nucl_mask")
    Name to assign these images:nucl_img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mask_type "cell_mask")
    Name to assign these images:cell_img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:cell_img
    Name the output object:cell_raw
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:nucl_img
    Name the output object:nucl_raw_unmerged
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MeasureImageQuality:[module_num:7|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:actin, dna, mito
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
FlagImage:[module_num:8|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:no_cells
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
    Select the object to be used for flagging:cell_raw
    Which measurement?:Count_cell_raw
    Flag images based on low values?:Yes
    Minimum value:5
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

RelateObjects:[module_num:9|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
    Parent objects:cell_raw
    Child objects:nucl_raw_unmerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:10|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notes:['Merge nuclei with the same parent']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
    Select the input objects:nucl_raw_unmerged
    Name the new objects:nucl
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:cell_raw
    Output object type:Disconnected

ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:cell_raw
    Name the output objects:cell_shrunk
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskObjects:[module_num:12|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
    Select objects to be masked:cell_raw
    Name the masked objects:memb_tmp
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:cell_shrunk
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:13|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
    Select objects to be masked:memb_tmp
    Name the masked objects:memb
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nucl
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:14|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
    Select objects to be masked:cell_raw
    Name the masked objects:cyto
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nucl
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

Threshold:[module_num:15|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
    Select the input image:mito
    Name the output image:mito_thresh
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertImageToObjects:[module_num:16|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
    Select the input image:mito_thresh
    Name the output object:mito
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

FilterObjects:[module_num:17|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notes:['Exclude nuclei 5% arround the image borders']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
    Select the objects to filter:cell_raw
    Name the output objects:cell
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
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
RelateObjects:[module_num:18|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
    Parent objects:cell
    Child objects:nucl
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:cell
    Child objects:memb
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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
    Parent objects:cell
    Child objects:cyto
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:21|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
    Parent objects:cell
    Child objects:mito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:22|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
    Select the input objects:mito
    Name the new objects:mitoNetwork
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:cell
    Output object type:Disconnected

RelateObjects:[module_num:23|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
    Parent objects:cell
    Child objects:mitoNetwork
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:cell, nucl
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:mito, mitoNetwork
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:26|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:27|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
    Select objects to measure:mito
    Select neighboring objects to measure:mito
    Method to determine neighbors:Within a specified distance
    Neighbor distance:3
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:28|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
    Select images to measure:actin, dna, mito
    Select objects to measure:cell, cyto, memb, nucl

MeasureObjectIntensity:[module_num:29|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
    Select images to measure:mito
    Select objects to measure:mito, mitoNetwork

MeasureImageAreaOccupied:[module_num:30|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
    Measure the area occupied by:Objects
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    Select object sets to measure:cell

MeasureObjectIntensityDistribution:[module_num:31|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
    Select images to measure:actin, mito
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:5
    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:6
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
MeasureObjectIntensityDistribution:[module_num:32|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
    Select images to measure:dna
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:5
    Select objects to measure:nucl
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureGranularity:[module_num:33|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
    Select images to measure:mito
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:3
    Range of the granular spectrum:12

MeasureColocalization:[module_num:34|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
    Select images to measure:actin, dna, mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:cell
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureTexture:[module_num:35|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
    Select images to measure:actin, mito
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:2
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:12

MeasureTexture:[module_num:36|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
    Select images to measure:dna
    Select objects to measure:nucl
    Enter how many gray levels to measure the texture at:256
    Hidden:2
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:12

ExportToSpreadsheet:[module_num:37|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|ExecutionTime_17FilterObjects,Image|ExecutionTime_11ExpandOrShrinkObjects,Image|ExecutionTime_04Groups,Image|ExecutionTime_15Threshold,Image|ExecutionTime_06ConvertImageToObjects,Image|ExecutionTime_13MaskObjects,Image|ExecutionTime_30MeasureImageAreaOccupied,Image|ExecutionTime_21RelateObjects,Image|ExecutionTime_01Images,Image|ExecutionTime_26MeasureObjectNeighbors,Image|ExecutionTime_28MeasureObjectIntensity,Image|ExecutionTime_10SplitOrMergeObjects,Image|ExecutionTime_34MeasureColocalization,Image|ExecutionTime_35MeasureTexture,Image|ExecutionTime_08FlagImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:tglow_2d_v1_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cyto
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:memb
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:nucl
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:mito
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:mitoNetwork
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
