CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<field>\d+)_(?P<mask_type>.*_mask)_d\d+_ch\d+_cp_masks.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<field>\d+)_(?P<plate>.*)_(?P<well>\w\d\d)_ch(?P<channel>\d+)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "mask")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'ch0': 'field', 'ch1': 'field', 'ch2': 'field', 'ch3': 'field', 'ch4': 'field', 'nucl_img': 'field', 'cells_img': 'field'}]
    Image set matching method:Metadata
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    Assignments count:7
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:4
    Select the rule criteria:and (metadata does channel "0")
    Name to assign these images:ch0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "1")
    Name to assign these images:ch1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "2")
    Name to assign these images:ch2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "3")
    Name to assign these images:ch3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "4")
    Name to assign these images:ch4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mask_type "cell_mask")
    Name to assign these images:cells_img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mask_type "nucl_mask")
    Name to assign these images:nucl_img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:cells_img
    Name the output object:cells_raw
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:nucl_img
    Name the output object:nucl_raw
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MaskImage:[module_num:7|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
    Select the input image:cells_img
    Name the output image:cyto_img
    Use objects or an image as a mask?:Objects
    Select object for mask:nucl_raw
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    Invert the mask?:Yes

ConvertImageToObjects:[module_num:8|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
    Select the input image:cyto_img
    Name the output object:cyto_raw
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

RelateObjects:[module_num:9|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
    Parent objects:cells_raw
    Child objects:nucl_raw
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:10|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
    Parent objects:cells_raw
    Child objects:cyto_raw
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:11|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notes:['Exclude nuclei 5% arround the image borders']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
    Select the objects to filter:cells_raw
    Name the output objects:cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:2
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select additional object to relabel:nucl_raw
    Name the relabeled objects:nucl
    Select additional object to relabel:cyto_raw
    Name the relabeled objects:cyto
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
MeasureImageQuality:[module_num:12|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:ch0, ch2, ch3, ch4
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:cells, nucl
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:ch0, ch2, ch3, ch4
    Select objects to measure:cells, nucl

MeasureImageAreaOccupied:[module_num:16|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
    Measure the area occupied by:Objects
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    Select object sets to measure:cells

MeasureGranularity:[module_num:17|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
    Select images to measure:ch3
    Measure within objects?:Yes
    Select objects to measure:cells
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureColocalization:[module_num:18|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
    Select images to measure:ch2, ch3, ch4
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureTexture:[module_num:19|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
    Select images to measure:ch0
    Select objects to measure:cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:tglow_3d_v1_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_images.tsv
    Use the object name for the file name?:No
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_experiment.tsv
    Use the object name for the file name?:No
    Data to export:cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_cells.tsv
    Use the object name for the file name?:No
    Data to export:nucl
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_objectRelationships.tsv
    Use the object name for the file name?:No
