CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_20231114_CellDivider_(?P<group>.+_[A-Z]\d+_f\d+)_max_projection.tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:jm52_20231114_CellDivider_(?P<plate>[a-zA-Z0-9_]+)_(?P<well>[A-Z]\d+)_(?P<field>f\d+)_max_projection.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:cd25_ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:ctv
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "4")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:3
    Threshold count:1
    Select the images to measure:actin
    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
FlagImage:[module_num:6|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:image_qc
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_ThresholdOtsu_actin_2W
    Flag images based on low values?:Yes
    Minimum value:0.003
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

HistogramMatching:[module_num:7|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
    Select the input image:cd25_ki67
    Name the output image:cd25_ki67_eq
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :actin
    Frame number:5

HistogramMatching:[module_num:8|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
    Select the input image:ctv
    Name the output image:ctv_eq
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :actin
    Frame number:5

HistogramMatching:[module_num:9|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
    Select the input image:mito
    Name the output image:mito_eq
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :actin
    Frame number:5

HistogramMatching:[module_num:10|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
    Select the input image:brightfield
    Name the output image:brightfield_eq
    Is your image 3D?:No
    Use a frame within image as reference?:No
    Image to use as reference :actin
    Frame number:5

ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:cell_intensity_eq
    Image or measurement?:Image
    Select the first image:actin
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:brightfield_eq
    Multiply the second image by:1
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    Image or measurement?:Image
    Select the third image:mito_eq
    Multiply the third image by:1
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    Image or measurement?:Image
    Select the fourth image:cd25_ki67_eq
    Multiply the fourth image by:1.0
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
Threshold:[module_num:12|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
    Select the input image:cell_intensity_eq
    Name the output image:cell_intenstiy_eq_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:13|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cell_intensity_eq_masked
    Image or measurement?:Image
    Select the first image:cell_intensity_eq
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cell_intenstiy_eq_thresh
    Multiply the second image by:1.0
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
GaussianFilter:[module_num:14|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
    Select the input image:actin
    Name the output image:actin_filtered
    Sigma:5

Threshold:[module_num:15|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
    Select the input image:actin_filtered
    Name the output image:actin_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ImageMath:[module_num:16|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cell_intensity_min_actin
    Image or measurement?:Image
    Select the first image:cell_intensity_eq_masked
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:actin_thresh
    Multiply the second image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:17|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enabled:False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
    Select the input image:cell_intensity_min_actin
    Name the output image:cell_seed_img
    Select the operation:Suppress
    Feature size:20
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
ImageMath:[module_num:18|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:actin_thresh_inv
    Image or measurement?:Image
    Select the first image:actin_thresh
    Multiply the first image by:1
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    Image or measurement?:Image
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
ImageMath:[module_num:19|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cell_seed_img_mask_raw
    Image or measurement?:Image
    Select the first image:actin_thresh_inv
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cell_intenstiy_eq_thresh
    Multiply the second image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:20|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
    Select the input image:cell_seed_img_mask_raw
    Name the output image:cell_seed_img_mask_raw_suppressed
    Select the operation:Suppress
    Feature size:15
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
Closing:[module_num:21|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
    Select the input image:cell_seed_img_mask_raw_suppressed
    Name the output image:cell_seed_img_mask_raw_suppresed_closed
    Structuring element:disk,5

RemoveHoles:[module_num:22|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
    Select the input image:cell_seed_img_mask_raw_suppresed_closed
    Name the output image:cell_seed_img_mask_raw_suppresed_closed_hrm
    Size of holes to fill:100

EnhanceOrSuppressFeatures:[module_num:23|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
    Select the input image:cell_seed_img_mask_raw_suppresed_closed_hrm
    Name the output image:cell_seed_img_mask
    Select the operation:Suppress
    Feature size:20
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
IdentifyPrimaryObjects:[module_num:24|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
    Select the input image:cell_seed_img_mask
    Name the primary objects to be identified:seeds_raw
    Typical diameter of objects, in pixel units (Min,Max):10,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:25|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
    Select the input objects:seeds_raw
    Name the objects to be identified:cells_raw
    Select the method to identify the secondary objects:Propagation
    Select the input image:cell_intensity_eq
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
FilterObjects:[module_num:26|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notes:['Remove nuclei with centers overlapping the image border within 5%']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
    Select the objects to filter:seeds_raw
    Name the output objects:seeds
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
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
FilterObjects:[module_num:27|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notes:['Remove cells with centers overlapping the image border within 5%']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
    Select the objects to filter:cells_raw
    Name the output objects:cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
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
GrayToColor:[module_num:28|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:composite_img
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    Hidden:4
    Image name:actin
    Color:#ff0000
    Weight:1.0
    Image name:cd25_ki67_eq
    Color:#00E0F7
    Weight:1.0
    Image name:ctv_eq
    Color:#0000ff
    Weight:1.0
    Image name:mito_eq
    Color:#FF1FFF
    Weight:1.0

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:composite_img
    Name the output image:composite_img_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:seeds
    Select outline color:#F6E700
    Select objects to display:cells

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:composite_img
    Select method for constructing file names:Single name
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    Enter single file name:tglow_2d_v1_composite_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|segmentation_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:composite_img_overlay
    Select method for constructing file names:Single name
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    Enter single file name:tglow_2d_v1_composite_segmented_\g<group>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|segmentation_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureImageIntensity:[module_num:32|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
    Select images to measure:actin, cd25_ki67, ctv, mito
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

MeasureObjectIntensity:[module_num:33|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
    Select images to measure:actin, cd25_ki67, ctv, mito
    Select objects to measure:cells

MeasureObjectSizeShape:[module_num:34|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
    Select object sets to measure:cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureColocalization:[module_num:35|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
    Select images to measure:actin, cd25_ki67, ctv, mito
    Set threshold as percentage of maximum intensity for the images:5.0
    Select where to measure correlation:Within objects
    Select objects to measure:cells
    Run all metrics?:No
    Calculate correlation and slope metrics?:No
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureTexture:[module_num:36|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
    Select images to measure:actin, ctv, mito
    Select objects to measure:cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureGranularity:[module_num:37|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
    Select images to measure:ctv, mito
    Measure within objects?:Yes
    Select objects to measure:cells
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:1
    Range of the granular spectrum:16

MeasureObjectNeighbors:[module_num:38|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
    Select objects to measure:cells
    Select neighboring objects to measure:cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:39|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Julie/20230728_TCA/results_test_farm
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Intensity_MaxIntensity_cd25_ki67,Image|Intensity_MaxIntensity_actin,Image|Intensity_MaxIntensity_ctv,Image|Intensity_MaxIntensity_mito,Image|Intensity_MinIntensity_actin,Image|Intensity_MinIntensity_ctv,Image|Intensity_MinIntensity_cd25_ki67,Image|Intensity_MinIntensity_mito,Image|Intensity_TotalArea_mito,Image|Intensity_TotalArea_cd25_ki67,Image|Intensity_TotalArea_ctv,Image|Intensity_TotalArea_actin,Image|Intensity_StdIntensity_cd25_ki67,Image|Intensity_StdIntensity_mito,Image|Intensity_StdIntensity_ctv,Image|Intensity_StdIntensity_actin,Image|Intensity_PercentMaximal_cd25_ki67,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:tglow_cell_divider_2d_pipeline_v1_
    Overwrite existing files without warning?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_experiment.tsv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_image.tsv
    Use the object name for the file name?:No
    Data to export:cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_cells.tsv
    Use the object name for the file name?:No
    Data to export:seeds
    Combine these object measurements with those of the previous object?:Yes
    File name:\g<plate>_\g<well>_objectRelationships.tsv
    Use the object name for the file name?:No
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
    File name:\g<plate>_\g<well>_objectRelationships.tsv
    Use the object name for the file name?:No
