CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<field>\d+)_(?P<mask_type>.*_mask)_d\d+_ch\d+_cp_masks.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<field>\d+)_(?P<plate>.*)_(?P<well>\w\d\d)_ch(?P<channel>\d+)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "mask")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'cd25_ki67': 'field', 'actin': 'field', 'mito': 'field', 'nucl': 'field', 'cell_img': 'field', 'nucl_img': 'field'}]
    Image set matching method:Metadata
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    Assignments count:6
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:4.026846
    Select the rule criteria:and (metadata does channel "0")
    Name to assign these images:cd25_ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "3")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "4")
    Name to assign these images:nucl
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does channel "2")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mask_type "nucl_mask")
    Name to assign these images:nucl_img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mask_type "cell_mask")
    Name to assign these images:cell_img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:cell_img
    Name the output object:cell_raw
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:nucl_img
    Name the output object:nucl
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FilterObjects:[module_num:7|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notes:['Exclude nuclei 5% arround the image borders']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
    Select the objects to filter:cell_raw
    Name the output objects:cell
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:108
    Filter using a maximum measurement value?:Yes
    Maximum value:2052
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
ErodeObjects:[module_num:8|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
    Select the input object:cell_raw
    Name the output object:cell_shrunk
    Structuring element:disk,5
    Prevent object removal:Yes
    Relabel resulting objects:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:cell_shrunk
    Name the output image:cell_shrunk_img
    Select the color format:Binary (black & white)
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
Threshold:[module_num:10|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
    Select the input image:nucl_img
    Name the output image:nucl_img_bin
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000015259021897
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
ImageMath:[module_num:11|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cell_shrunk_img_inv
    Image or measurement?:Image
    Select the first image:cell_shrunk_img
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:memb_mask
    Image or measurement?:Image
    Select the first image:cell_shrunk_img_inv
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:nucl_img_bin
    Multiply the second image by:1.0
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
ImageMath:[module_num:13|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:memb_img
    Image or measurement?:Image
    Select the first image:cell_img
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:memb_mask
    Multiply the second image by:1.0
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
ImageMath:[module_num:14|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:nucl_img_bin_inv
    Image or measurement?:Image
    Select the first image:nucl_img_bin
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:15|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cyto_img
    Image or measurement?:Image
    Select the first image:cell_img
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:nucl_img_bin_inv
    Multiply the second image by:1.0
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
Threshold:[module_num:16|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
    Select the input image:cyto_img
    Name the output image:cyto_img_bin
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000015259021897
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
Threshold:[module_num:17|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
    Select the input image:memb_img
    Name the output image:memb_img_bin
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000015259021897
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
ConvertImageToObjects:[module_num:18|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
    Select the input image:memb_img
    Name the output object:memb
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:19|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
    Select the input image:cyto_img
    Name the output object:cyto
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

RelateObjects:[module_num:20|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
    Parent objects:cell
    Child objects:nucl
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:21|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
    Parent objects:cell
    Child objects:cyto
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:22|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
    Parent objects:cell
    Child objects:memb
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ImageMath:[module_num:23|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cd25
    Image or measurement?:Image
    Select the first image:cd25_ki67
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cyto_img_bin
    Multiply the second image by:1.0
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
ImageMath:[module_num:24|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ki67
    Image or measurement?:Image
    Select the first image:cd25_ki67
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:nucl_img_bin
    Multiply the second image by:1.0
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
MeasureImageQuality:[module_num:25|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:actin, cd25_ki67, mito, nucl
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:26|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
    Select object sets to measure:cell, nucl
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:27|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:28|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
    Select images to measure:actin, cd25, cd25_ki67, ki67, mito, nucl
    Select objects to measure:cell, cyto, memb, nucl

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Threshold_WeightedVariance_memb_img_bin,Image|Threshold_WeightedVariance_nucl_img_bin,Image|Threshold_WeightedVariance_cyto_img_bin,Image|Threshold_SumOfEntropies_cyto_img_bin,Image|Threshold_SumOfEntropies_nucl_img_bin,Image|Threshold_SumOfEntropies_memb_img_bin,Image|Threshold_OrigThreshold_nucl_img_bin,Image|Threshold_OrigThreshold_cyto_img_bin,Image|Threshold_OrigThreshold_memb_img_bin,Image|Threshold_FinalThreshold_cyto_img_bin,Image|Threshold_FinalThreshold_memb_img_bin,Image|Threshold_FinalThreshold_nucl_img_bin,Image|ImageQuality_TotalIntensity_nucl,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:tglow_3d_v4_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:memb
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:nucl
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cyto
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
